PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = run_experiment
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    ParallelOutComponent p_port
      address = 0xCFF8
      register = EIO
      startData = 1
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        from experiment_logic import SpaceprimeSession
        from utils.utils import get_input_from_dict

        info = get_input_from_dict({"subject_id": 99,  # enter subject id
                                    "test": True,  # enter if test run (1) or not (0)
                                    "block": 0})

        # create subject sequence
        # generate_subject_sequence(subject_id=info["subject_id"])
        sess = SpaceprimeSession(output_str=f'sub-{info["subject_id"]}', output_dir="logs",
                                 settings_file="config.yaml",
                                 starting_block=info["block"], test=True if info["test"] == 1 else False)
        sess.run()
        sess.quit()
Flow
  Routine trial
